'CR6 Series
'Created by Short Cut (4.4)

'Declare Variables and Units
Public BattV
Public PTemp_C
Public SEVolt1
Public SEVolt3

Units BattV=Volts
Units PTemp_C=Deg C
Units SEVolt1=mV
Units SEVolt3=mV

'Define Data Tables
DataTable(Table1,True,-1)
	DataInterval(0,2,Min,10)
	Sample(1,BattV,FP2)
	Sample(1,PTemp_C,FP2)
	Average(1,SEVolt1,FP2,False)
	Average(1,SEVolt3,FP2,False)
EndTable

'Main Program
BeginProg
	'Main Scan
	Scan(30,Sec,1,0)
		'Default CR6 Datalogger Battery Voltage measurement 'BattV'
		Delay(0,5,Sec)
		SW12(SW12_1,1)
		SW12(SW12_2,1)
		Delay(0,10,Sec)
		Battery(BattV)
		'Default CR6 Datalogger Wiring Panel Temperature measurement 'PTemp_C'
		PanelTemp(PTemp_C,60)
		'Generic Single-Ended Voltage measurements 'SEVolt1'
		VoltSE(SEVolt1,1,mV5000,U1,True,500,60,1,0)
		'Generic Single-Ended Voltage measurements 'SEVolt3'
		VoltSe(SEVolt3,1,mV5000,U3,True,500,60,1,0)
		SW12(SW12_1,0)
		SW12(SW12_2,0)
		'Call Data Tables and Store Data
		CallTable Table1
	NextScan
EndProg
