'CR6 Series
'Created by Short Cut (4.4)

'Declare Variables and Units
Public BattV
Public PTemp_C
Public SEVolt

Units BattV=Volts
Units PTemp_C=Deg C
Units SEVolt=mV

'Define Data Tables
DataTable(Table1,True,-1)
	DataInterval(0,5,Sec,10)
	Sample(1,BattV,FP2)
	Sample(1,PTemp_C,FP2)
	Sample(1,SEVolt,FP2)
EndTable

'Main Program
BeginProg
	'Main Scan
	Scan(5,Sec,1,0)
		'Default CR6 Datalogger Battery Voltage measurement 'BattV'
		Battery(BattV)
		'Default CR6 Datalogger Wiring Panel Temperature measurement 'PTemp_C'
		PanelTemp(PTemp_C,60)
		'Generic Single-Ended Voltage measurements 'SEVolt'
		VoltSE(SEVolt,1,mV5000,U1,True,500,60,1,0)
		'Call Data Tables and Store Data
		CallTable Table1
	NextScan
EndProg
