'CR6 Datalogger
'The datalogger type listed on line 1 determines the default instruction set,
'compiler, and help files used for a program that uses the .DLD or .CRB program
'extension. These options can also be set using the Set Datalogger Type dialog box
'(CRBasic Editor|Tools|Set Datalogger Type).

'For programming tips, copy this address to your browser
'search window:https://www.campbellsci.com/videos/datalogger-programming

'To create a different opening program template, type in new
'instructions and select Template | Save as Default Template

'Date:
'Program author:

'Declare Constants
'Example:
'CONST PI = 3.141592654

'Declare Public Variables
'Example:
Public PTemp, Batt_volt

'Declare Private Variables
'Example:
'Dim Counter

'Define Data Tables
DataTable (Test,1,-1) 'Set table size to # of records, or -1 to autoallocate.
	DataInterval (0,20,Sec,10)
	Minimum (1,batt_volt,FP2,False,False)
	Sample (1,PTemp,FP2)
EndTable

'Define Subroutines
'Sub
	'EnterSub instructions here
'EndSub

'Main Program
BeginProg
	Scan (5,Sec,0,0)
	  SW12(SW12_1,1)
	  Delay(0,2,Sec)
		PanelTemp (PTemp,20000)
		Battery (Batt_volt)
		'Enter other measurement instructions
		'Call Output Tables
		'Example:
		CallTable Test
		SW12(SW12_1,0)
	NextScan
EndProg

